<CompuCell3D Revision="0" Version="4.4.1">
   
   <Metadata>
      
      <!-- Basic properties simulation -->
      <NumberOfProcessors>1</NumberOfProcessors>
      <DebugOutputFrequency>100</DebugOutputFrequency>
      <!-- <NonParallelModule Name="Potts"/> -->
   </Metadata>
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="256" y="256" z="1"/>
      <Steps>100000</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>1</NeighborOrder>
      <Boundary_x>Periodic</Boundary_x>
      <Boundary_y>Periodic</Boundary_y>
   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="LUM"/>
      <CellType TypeId="2" TypeName="EPI"/>
      <CellType TypeId="3" TypeName="MYO"/>
      <CellType TypeId="4" TypeName="MEM"/>
      <CellType TypeId="5" TypeName="MAC_A"/>
      <CellType TypeId="6" TypeName="MAC_B"/>
   </Plugin>
   
   <Plugin Name="Volume"/>
   
   <!-- <Plugin Name="Surface"/> -->
   
   <Plugin Name="ExternalPotential">
      
      <!-- External force applied to cell. Each cell type has different force. -->
      <!-- For more flexible specification of the constraint (done in Python) please use ExternalPotential plugin without specifying per-type parameters -->
      <!-- Algorithm options are: PixelBased, CenterOfMassBased -->
      <!-- <Algorithm>PixelBased</Algorithm> -->
      <!-- <ExternalPotentialParameters CellType="LUM" x="-0.5" y="0.0" z="0.0"/> -->
      <!-- <ExternalPotentialParameters CellType="EPI" x="-0.5" y="0.0" z="0.0"/> -->
      <!-- <ExternalPotentialParameters CellType="MYO" x="-0.5" y="0.0" z="0.0"/> -->
      <!-- <ExternalPotentialParameters CellType="MEM" x="-0.5" y="0.0" z="0.0"/> -->
      <!-- <ExternalPotentialParameters CellType="MAC_A" x="-0.5" y="0.0" z="0.0"/> -->
      <!-- <ExternalPotentialParameters CellType="MAC_B" x="-0.5" y="0.0" z="0.0"/> -->
      
      <!-- External force applied to cell. Each cell has different force and force components have to be managed in Python. -->
      <!-- e.g. cell.lambdaVecX=0.5; cell.lambdaVecY=0.1 ; cell.lambdaVecZ=0.3; -->
      <Algorithm>PixelBased</Algorithm>
   </Plugin>
   
   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
   <Plugin Name="NeighborTracker">
      
      <!-- Module tracking neighboring cells of each cell -->
   </Plugin>
   
   <Plugin Name="PixelTracker">
      
      <!-- Module tracking pixels of each cell -->
   </Plugin>
   
   <Plugin Name="Contact">
      <!-- Specification of adhesion energies -->
      <Energy Type1="Medium" Type2="Medium">10.0</Energy>
      <Energy Type1="Medium" Type2="LUM">800.0</Energy>
      <Energy Type1="Medium" Type2="EPI">70.0</Energy>
      <Energy Type1="Medium" Type2="MYO">30.0</Energy>
      <Energy Type1="Medium" Type2="MEM">10.0</Energy>
      <Energy Type1="Medium" Type2="MAC_A">10.0</Energy>
      <Energy Type1="Medium" Type2="MAC_B">10.0</Energy>
      <Energy Type1="LUM" Type2="LUM">10.0</Energy>
      <Energy Type1="LUM" Type2="EPI">10.0</Energy>
      <Energy Type1="LUM" Type2="MYO">70.0</Energy>
      <Energy Type1="LUM" Type2="MEM">80.0</Energy>
      <Energy Type1="LUM" Type2="MAC_A">80.0</Energy>
      <Energy Type1="LUM" Type2="MAC_B">80.0</Energy>
      <Energy Type1="EPI" Type2="EPI">10.0</Energy>
      <Energy Type1="EPI" Type2="MYO">10.0</Energy>
      <Energy Type1="EPI" Type2="MEM">50.0</Energy>
      <Energy Type1="EPI" Type2="MAC_A">50.0</Energy>
      <Energy Type1="EPI" Type2="MAC_B">50.0</Energy>
      <Energy Type1="MYO" Type2="MYO">10.0</Energy>
      <Energy Type1="MYO" Type2="MEM">10.0</Energy>
      <Energy Type1="MYO" Type2="MAC_A">10.0</Energy>
      <Energy Type1="MYO" Type2="MAC_B">10.0</Energy>
      <Energy Type1="MEM" Type2="MEM">10.0</Energy>
      <Energy Type1="MEM" Type2="MAC_A">10.0</Energy>
      <Energy Type1="MEM" Type2="MAC_B">10.0</Energy>
      <Energy Type1="MAC_A" Type2="MAC_A">10.0</Energy>
      <Energy Type1="MAC_A" Type2="MAC_B">10.0</Energy>
      <Energy Type1="MAC_B" Type2="MAC_B">10.0</Energy>
      <NeighborOrder>4</NeighborOrder>
   </Plugin>
   
   <Plugin Name="GlobalBoundaryPixelTracker">
    <NeighborOrder>1</NeighborOrder>
  </Plugin>
   
   <!-- <Plugin Name="Chemotaxis"> -->
      
      <!-- &lt;!&ndash; You may repeat ChemicalField element for each chemical field declared in the PDE solvers &ndash;&gt;  -->
      <!-- &lt;!&ndash; Specification of chemotaxis properties of select cell types. &ndash;&gt;  -->
      <!-- <ChemicalField Name="CHEM"> -->
         <!-- <ChemotaxisByType Lambda="0.0" Type="MEM"/> -->
      <!-- </ChemicalField> -->
   <!-- </Plugin> -->
   
   <!-- <Steppable Type="DiffusionSolverFE"> -->
      
      <!-- &lt;!&ndash; Specification of PDE solvers &ndash;&gt;  -->
      <!-- <DiffusionField Name="CHEM"> -->
         <!-- <DiffusionData> -->
            <!-- <FieldName>CHEM</FieldName> -->
            <!-- <GlobalDiffusionConstant>0.1</GlobalDiffusionConstant> -->
            <!-- <GlobalDecayConstant>1e-05</GlobalDecayConstant> -->
            <!-- &lt;!&ndash; Additional options are: &ndash;&gt;  -->
            <!-- &lt;!&ndash; <InitialConcentrationExpression>x*y</InitialConcentrationExpression> &ndash;&gt;  -->
            <!-- &lt;!&ndash; <ConcentrationFileName>INITIAL CONCENTRATION FIELD - typically a file with path Simulation/NAME_OF_THE_FILE.txt</ConcentrationFileName> &ndash;&gt;  -->
            <!-- <DiffusionCoefficient CellType="LUM">0.1</DiffusionCoefficient> -->
            <!-- <DiffusionCoefficient CellType="EPI">0.1</DiffusionCoefficient> -->
            <!-- <DiffusionCoefficient CellType="MYO">0.1</DiffusionCoefficient> -->
            <!-- <DiffusionCoefficient CellType="MEM">0.1</DiffusionCoefficient> -->
            <!-- <DiffusionCoefficient CellType="MAC_A">0.1</DiffusionCoefficient> -->
            <!-- <DiffusionCoefficient CellType="MAC_B">0.1</DiffusionCoefficient> -->
            <!-- <DecayCoefficient CellType="LUM">0.0001</DecayCoefficient> -->
            <!-- <DecayCoefficient CellType="EPI">0.0001</DecayCoefficient> -->
            <!-- <DecayCoefficient CellType="MYO">0.0001</DecayCoefficient> -->
            <!-- <DecayCoefficient CellType="MEM">0.0001</DecayCoefficient> -->
            <!-- <DecayCoefficient CellType="MAC_A">0.0001</DecayCoefficient> -->
            <!-- <DecayCoefficient CellType="MAC_B">0.0001</DecayCoefficient> -->
         <!-- </DiffusionData> -->
         <!-- <SecretionData> -->
            <!-- &lt;!&ndash; When secretion is defined inside DissufionSolverFE all secretion constants are scaled automaticaly to account for the extra calls to the diffusion step when handling large diffusion constants &ndash;&gt;  -->
            
            <!-- &lt;!&ndash; Uniform secretion Definition &ndash;&gt;  -->
            <!-- <Secretion Type="LUM">0.1</Secretion> -->
            <!-- <Secretion Type="EPI">0.1</Secretion> -->
            <!-- <Secretion Type="MYO">0.1</Secretion> -->
            <!-- <Secretion Type="MEM">0.1</Secretion> -->
            <!-- <Secretion Type="MAC_A">0.1</Secretion> -->
            <!-- <Secretion Type="MAC_B">0.1</Secretion> -->
            <!-- &lt;!&ndash; <SecretionOnContact SecreteOnContactWith="LUM,EPI,MYO,MEM,MAC_A,MAC_B" Type="MAC_B">0.2</SecretionOnContact> &ndash;&gt;  -->
            <!-- &lt;!&ndash; <ConstantConcentration Type="MAC_B">0.1</ConstantConcentration> &ndash;&gt;  -->
         <!-- </SecretionData> -->
         <!-- <BoundaryConditions> -->
            <!-- <Plane Axis="X"> -->
               <!-- <ConstantValue PlanePosition="Min" Value="10.0"/> -->
               <!-- <ConstantValue PlanePosition="Max" Value="5.0"/> -->
               <!-- &lt;!&ndash; Other options are (examples): &ndash;&gt;  -->
               <!-- &lt;!&ndash; <Periodic/> &ndash;&gt;  -->
               <!-- &lt;!&ndash; <ConstantDerivative PlanePosition="Min" Value="10.0"/> &ndash;&gt;  -->
            <!-- </Plane> -->
            <!-- <Plane Axis="Y"> -->
               <!-- <ConstantDerivative PlanePosition="Min" Value="10.0"/> -->
               <!-- <ConstantDerivative PlanePosition="Max" Value="5.0"/> -->
               <!-- &lt;!&ndash; Other options are (examples): &ndash;&gt;  -->
               <!-- &lt;!&ndash; <Periodic/> &ndash;&gt;  -->
               <!-- &lt;!&ndash; <ConstantValue PlanePosition="Min" Value="10.0"/> &ndash;&gt;  -->
            <!-- </Plane> -->
         <!-- </BoundaryConditions> -->
      <!-- </DiffusionField> -->
   <!-- </Steppable> -->
   
   <Steppable Type="UniformInitializer">
      
      <!-- Initial layout of cells in the form of rectangular slab -->
      <Region>
         <BoxMin x="120" y="120" z="0"/>
         <BoxMax x="129" y="129" z="1"/>
         <Gap>0</Gap>
         <Width>10</Width>
         <Types>LUM</Types>
      </Region>
      <Region>
         <BoxMin x="120" y="130" z="0"/>
         <BoxMax x="129" y="139" z="1"/>
         <Gap>0</Gap>
         <Width>10</Width>
         <Types>EPI</Types>
      </Region>
      <Region>
         <BoxMin x="130" y="120" z="0"/>
         <BoxMax x="139" y="129" z="1"/>
         <Gap>0</Gap>
         <Width>10</Width>
         <Types>MYO</Types>
      </Region>
      <Region>
         <BoxMin x="130" y="130" z="0"/>
         <BoxMax x="139" y="139" z="1"/>
         <Gap>0</Gap>
         <Width>10</Width>
         <Types>MEM</Types>
      </Region>
      <Region>
         <BoxMin x="150" y="150" z="0"/>
         <BoxMax x="159" y="159" z="1"/>
         <Gap>0</Gap>
         <Width>10</Width>
         <Types>MAC_A</Types>
      </Region>
      <Region>
         <BoxMin x="150" y="150" z="0"/>
         <BoxMax x="159" y="159" z="1"/>
         <Gap>0</Gap>
         <Width>10</Width>
         <Types>MAC_B</Types>
      </Region>
   </Steppable>
</CompuCell3D>
